PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = black
  expName = GoNogo-Flanker
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine GoNogo_StartScreen
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    TextComponent GoNogo_StartScreen_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        以下の内容を確認してください。

        利き手人差し指をスペースキー上においてください。

        画面中央に「〇」が一瞬呈示されます。

        〇の色が、
        青のとき、スペースキーを押してください。
        赤のとき、何も押さないでください。

        なるべく素早く、正確に反応してください。
        課題は3分程度です。

        スペースキーを押すと、課題が始まります。
    KeyboardComponent GoNogo_StartScreen_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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  Routine GoNogo_StartBlank
    RoutineSettingsComponent GoNogo_StartBlank
      saveStartStop = False
      stopVal [duration (s)] = 2
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  Routine GoNogo_Trial
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    KeyboardComponent GoNogo_Trial_resp
      allowedKeys [set every repeat] = 'space'
      correctAns = $resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    PolygonComponent GoNogo_Trial_Stim
      fillColor [set every repeat] = $color
      lineColor [set every repeat] = $color
      shape = circle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine GoNogo_EndScreen
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    TextComponent GoNogo_EndScreen_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        一つ目の課題は終了です。

        スペースキーを押すと、次の課題の説明が表示されます。
    KeyboardComponent GoNogo_EndScreen_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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  Routine Start
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    KeyboardComponent Start_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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    TextComponent Start_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        これから2種類の課題に取り組んでもらいます。
        所用時間はおおよそ10分です。

        各課題の前に表示されるアナウンスをよく読んで取り組んでください。

        スペースキーを押すと、一つ目の課題のアナウンスが表示されます。
  Routine Flanker_StartScreen
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    TextComponent Flanker_StartScreen_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        以下の内容を確認してください。

        左右の人差し指をそれぞれFキー、Jキー上においてください。

        画面中央に「5つの矢印」が一瞬呈示されます。
        真ん中の矢印の向きに従って、FキーもしくはJキーを押してください。

        例（課題ではいずれか一つが呈示されます。）
        <<<<<：左（Fキー）　>>>>>：右（Jキー）
        >><>>：左（Fキー）　<<><<：右（Jキー）

        なるべく早く正確に反応してください。
        課題は7分程度です。

        FキーもしくはJキーを押すと、課題が始まります。
    KeyboardComponent Flanker_StartScreen_key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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  Routine Flanker_StartBlank
    RoutineSettingsComponent Flanker_StartBlank
      saveStartStop = False
      stopVal [duration (s)] = 2
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  Routine Flanker_Trial
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    TextComponent Flanker_Trial_Stim
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $stim
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    KeyboardComponent Flanker_Trial_key_resp
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine Flanker_EndScreen
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    TextComponent Flanker_EndScreen_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        お疲れさまでした。課題は以上で終了です。

        次のアナウンスに従って、データの送信を行ってください。

        スペースキーを押すと、次のアナウンスが表示されます。
    KeyboardComponent Flanker_EndScreen_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine End
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    TextComponent End_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        課題終了後、データファイルが自動でダウンロードされます。
        そのファイルをGoogleフォームに添付して送信してください。

        不具合や連絡事項があれば、フォーム内でご記入ください。

        スペースキーを押すと終了します。
        ご協力ありがとうございました。
    KeyboardComponent End_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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Flow
  Routine Start
  Routine GoNogo_StartScreen
  Routine GoNogo_StartBlank
  LoopInitiator GoNogo_Loop loopType="TrialHandler"
    conditionsFile = GoNogoTask80.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'},
      {'color': 'red', 'resp': 'none'},
      {'color': 'blue', 'resp': 'space'}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
    Routine GoNogo_Trial
  LoopTerminator GoNogo_Loop
  Routine GoNogo_EndScreen
  Routine Flanker_StartScreen
  Routine Flanker_StartBlank
  LoopInitiator Flanker_Loop loopType="TrialHandler"
    conditionsFile = FlankerTask160.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'},
      {'stim': '>><>>', 'resp': 'f'},
      {'stim': '>>>>>', 'resp': 'j'},
      {'stim': '<<><<', 'resp': 'j'},
      {'stim': '<<<<<', 'resp': 'f'}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
    Routine Flanker_Trial
  LoopTerminator Flanker_Loop
  Routine Flanker_EndScreen
  Routine End
